PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3008, 1692]
  expName = midi_psychopy_demo
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the midi-psychopy demo!

        Press space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_record
    TextComponent text_pre_record
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start recording!
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    KeyboardComponent key_resp_pre_record
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine record
    TextComponent recording
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Recording!

        Press space to terminate recording!
    KeyboardComponent key_resp_recording
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent midi_code
      Code Type = Py
      Begin Experiment:
        import os
        import pandas as pd
        from midi_controller import MidiController

        # Create an instance of MidiController
        # Note that globalClock is a standard PsychoPy variable that can be used to
        # synchronize the MIDI data with the PsychoPy global timer.
        midi_controller = MidiController(device_name='UM-ONE', psychopy_global_timer=globalClock)

        # Initialize a DataFrame to store the collected MIDI data
        keypress_data = pd.DataFrame()

        # Also initialize a variable to keep track of the trial number
        trial_count = 0

        # Define the path to save the data
        # expInfo is standard PsychoPy variable. make sure to check the name of the identifying variable in your experiment
        # (i.e., participant is the default name for the participant ID defined in the "Experiment Info" section of the "Basic"
        # tab in the PsychoPy GUI's "Properties" window).
        par_id = expInfo['participant']
        save_dir = os.path.abspath(f'./')
        file_name = f'par_{par_id}.csv'
        save_path = f'{save_dir}/{file_name}'
      Begin Routine:
        # Start data collection
        midi_controller.start_data_collection()
      End Routine:
        temp_out = midi_controller.sequence_out_full
        # Add a column to store the trial number. If there are other variables to store, add them here.
        temp_out['trial'] = trial_count

        trial_count += 1

        # Append the collected data to the keypress_data DataFrame
        keypress_data = pd.concat([keypress_data, temp_out], ignore_index=True)

        # Save the data to a csv file in case the experiment crashes
        keypress_data.to_csv(save_path)
  Routine end
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for checking out this demo!

        Press space to exit.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator collection_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine pre_record
    Routine record
  LoopTerminator collection_loop
  Routine end
